PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'gender': '', 'type': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1360, 768]
  expName = EMO_WORD
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
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      text [set every repeat]:
        $word_3
    TextComponent text_2
      letterHeight = 0.05
      pos = (0.4, 0,4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $word_2
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    TextComponent text_3
      letterHeight = 0.05
      pos = (-0.4, 0)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $word_1
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  Routine welcome
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    TextComponent text_4
      color = red
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = WELCOME!
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  Routine Induce_mood
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = flip the paper around and start reading the extract, try reflecting on it. see if you could remember an instance that made you feel as such.
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  Routine instructions
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      text = In this study, you will be shown a series of words that are postioned across the screen. These words will appear on the screen for a short period, and your task is to remember them as best as you can.
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  Routine debrief
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    TextComponent text_7
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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      text:
        Thank you for participating in this study! The purpose of this experiment was to explore how mood might influence the way people remember words with different emotional meanings. We showed you words that were categorized as positive, negative, and neutral, and your task was to recall these words after each presentation.

        Research has shown that our mood can subtly affect our memory and attention, sometimes making us more likely to remember information that matches our current emotional state. In this study, we aim to see whether people in different moods tend to remember certain types of words more easily—such as recalling more positive words when in a good mood or more negative words when in a negative mood.

        All of your responses will be kept confidential and will only be used for research purposes. If you have any questions about the study or are interested in the results, please feel free to reach out to us.
                         Thank you again for your time and participation!
  Routine start
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = CLICK SPACE TO START
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RECALL
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine IINSTRUCTIONS_2
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will have 2 minutes to write down all the words you can recall


                           CLICK SPACE WHEN READY
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GOODBYE
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    TextComponent text_10
      color = 0.8039, 0.8039, 0.9608
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = GOODBYE!
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Flow
  Routine welcome
  Routine Induce_mood
  Routine instructions
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trail_200.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word_1': 'Joy', 'word_2': 'Failure', 'word_3': 'Table'},
      {'word_1': 'Love', 'word_2': 'Pain', 'word_3': 'Window'},
      {'word_1': 'Success', 'word_2': 'Anger', 'word_3': 'Book'},
      {'word_1': 'Peace', 'word_2': 'Hate', 'word_3': 'Chair'},
      {'word_1': 'Freedom', 'word_2': 'Fear', 'word_3': 'Building'},
      {'word_1': 'Happiness', 'word_2': 'Stress', 'word_3': 'Number'},
      {'word_1': 'Friendship', 'word_2': 'Sadness', 'word_3': 'Car'},
      {'word_1': 'Hope', 'word_2': 'Loss', 'word_3': 'Tree'},
      {'word_1': 'Comfort', 'word_2': 'Conflict', 'word_3': 'Road'},
      {'word_1': 'Smile', 'word_2': 'Grief', 'word_3': 'Circle'},
      {'word_1': 'Achievement', 'word_2': 'Worry', 'word_3': 'Cloud'},
      {'word_1': 'Victory', 'word_2': 'Regret', 'word_3': 'Station'},
      {'word_1': 'Laughter', 'word_2': 'Guilt', 'word_3': 'Paper'},
      {'word_1': 'Strength', 'word_2': 'Frustration', 'word_3': 'Pencil'},
      {'word_1': 'Gratitude', 'word_2': 'Anxiety', 'word_3': 'Water'},
      {'word_1': 'Fun', 'word_2': 'Betrayal', 'word_3': 'Room'},
      {'word_1': 'Delight', 'word_2': 'Hurt', 'word_3': 'Door'},
      {'word_1': 'Relaxation', 'word_2': 'Disappointment', 'word_3': 'Lamp'},
      {'word_1': 'Cheer', 'word_2': 'Misery', 'word_3': 'Street'},
      {'word_1': 'Inspiration', 'word_2': 'Weakness', 'word_3': 'Cable'}]
    Routine trial
  LoopTerminator trials
  Routine IINSTRUCTIONS_2
  Routine RECALL
  Routine debrief
  Routine GOODBYE
