PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [1360, 768]
  expName = word_primming
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "familiar","unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text [set every repeat]:
        $test_word
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = click to submit
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    MouseComponent mouse
      clickable = text_3
      correctAns = correct_word
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study word_1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cusion'},
      {'study_word': 'piano'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 'tshirt'},
      {'study_word': 'mouse'},
      {'study_word': 'pastry'},
      {'study_word': 'cruise'},
      {'study_word': 'police'},
      {'study_word': 'keys'},
      {'study_word': 'poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_word_final.xlsx
    loopType = random
    nReps = 19
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    conditions:
      [{'test_word': 'l_pt_o_', 'Refrence': 'laptop', 'old_new': 'old'},
      {'test_word': '_ha_t', 'Refrence': 'chart', 'old_new': 'old'},
      {'test_word': 't_hi_t', 'Refrence': 'tshirt', 'old_new': 'old'},
      {'test_word': '_ou_e', 'Refrence': 'mouse', 'old_new': 'old'},
      {'test_word': 'p_s_r_', 'Refrence': 'pastry', 'old_new': 'old'},
      {'test_word': 'c_s_', 'Refrence': 'case', 'old_new': 'old'},
      {'test_word': 'c_u_i_', 'Refrence': 'cruise', 'old_new': 'old'},
      {'test_word': 'p_li_e', 'Refrence': 'police', 'old_new': 'old'},
      {'test_word': 'k_y_s', 'Refrence': 'keys', 'old_new': 'old'},
      {'test_word': 'p_st_r', 'Refrence': 'poster', 'old_new': 'old'},
      {'test_word': '_o_rd', 'Refrence': 'board', 'old_new': 'old'},
      {'test_word': '_ho_e', 'Refrence': 'phone', 'old_new': 'old'},
      {'test_word': '_oo_', 'Refrence': 'book', 'old_new': 'old'},
      {'test_word': 'c_s_i_n', 'Refrence': 'cushion', 'old_new': 'old'},
      {'test_word': 'ta_l_', 'Refrence': 'table', 'old_new': 'new'},
      {'test_word': 'p_n_il', 'Refrence': 'pencil', 'old_new': 'new'},
      {'test_word': 'v_s_', 'Refrence': 'vase', 'old_new': 'new'},
      {'test_word': 'bo_t_e', 'Refrence': 'bottle', 'old_new': 'new'},
      {'test_word': 'c_m_ra', 'Refrence': 'camera', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials_2
